PsychoPy2experiment version="1.78.00"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'Eye Tracker': u'', u'Participant': u''}
  Save excel file = True
  expName = stroop
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    GratingComponent grating
      opacity = .7
      tex = sin
      mask = circle
      units = pix
      startVal [time (s)] = 0
      sf = 32
      size = [16,16]
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    GratingComponent gaze_cursor
      opacity [set every frame] = $display_gaze
      tex = sin
      color = $[0.004,0.004,1.000]
      mask = circle
      pos [set every frame] = $[x,y]
      units = pix
      startVal [time (s)] = 0.0
      sf = 40
      size = $[20,20]
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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    CodeComponent eye_track_code
      Begin Experiment:
        maintain_fix_pix_boundary=66.0
        eyetracker = False #will change if we get one!
        if expInfo['Eye Tracker']:
            from psychopy.iohub import launchHubServer,EventConstants
            io=launchHubServer()
            iokeyboard=io.devices.keyboard
            mouse=io.devices.mouse
            if io.getDevice('eyetracker'):
                eyetracker=io.getDevice('eyetracker')
            display_gaze=False
            x,y=0,0
      Each Frame:
        if eyetracker:
            # check for 'g' key press to toggle gaze cursor visibility
            iokeys=iokeyboard.getEvents(EventConstants.KEYBOARD_PRESS)
            for iok in iokeys:
                if iok.key==u'g':
                    display_gaze=not display_gaze
            # get /eye tracker gaze/ position
            x,y=eyetracker.getPosition()
            d=np.sqrt(x**2+y**2)
            if d>maintain_fix_pix_boundary:
                heldFixation = False #unless otherwise
      Begin Routine:
        if eyetracker:
            heldFixation = True #unless otherwise
            io.clearEvents('all')
      End Routine:
        if eyetracker:
            #add eye-track data to data file
            trials.addData("heldFixation", heldFixation)
      End Experiment:
        if expInfo['Eye Tracker']:
            io.quit()
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
        	- Left for red LETTERS
        	- Down for green LETTERS
        	- Right for blue LETTERS
        	- (Esc will quit)
        3) To toggle gaze position visibility, press 'g'.

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
    conditions:
      [{u'text': u'red', u'congruent': 1, u'corrAns': 1, u'letterColor': u'red'},
      {u'text': u'red', u'congruent': 0, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 1, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 0, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 1, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 0, u'corrAns': 1, u'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
